PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word Priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Study_Phase
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'}]
    Routine Study_Phase
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'Laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Reference': 'Chart', 'old_new': 'old'},
      {'test_word': 'T_hi_t', 'Reference': 'Tshirt', 'old_new': 'old'},
      {'test_word': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'P_s_r_', 'Reference': 'Pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Reference': 'Case', 'old_new': 'old'},
      {'test_word': '_ru_is_', 'Reference': 'Cruise', 'old_new': 'old'},
      {'test_word': 'P_li_e', 'Reference': 'Police', 'old_new': 'old'},
      {'test_word': 'K_y_', 'Reference': 'Keys', 'old_new': 'old'},
      {'test_word': 'P_st_r', 'Reference': 'Poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'Board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Reference': 'Marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'Phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Reference': 'Book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'Reference': 'Cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Reference': 'Table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'Pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Reference': 'Vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'Bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Reference': 'Camera', 'old_new': 'new'}]
    Routine Test_Phase
  LoopTerminator trials_2
