PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = experiment psycho
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please memorize the following words. After the list, write down the words you remember. Press SPACE to begin.
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    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent wordtext
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $words
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  Routine Recall
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    TextComponent recall_instructions
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Please type one word you remember from the list. Press RIGHT to type the next word.
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    TextboxComponent recall_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (300, 50)
      startVal [time (s)] = 4.0
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    KeyboardComponent recall_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine EndScreen
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating! 
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordsconditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words': 'rain', 'condition': 'short'},
      {'words': 'perseverance', 'condition': 'long'},
      {'words': 'flame', 'condition': 'short'},
      {'words': 'responsibility', 'condition': 'long'},
      {'words': 'smile', 'condition': 'short'},
      {'words': 'transformation', 'condition': 'long'},
      {'words': 'book', 'condition': 'short'},
      {'words': 'constellation', 'condition': 'long'},
      {'words': 'sun', 'condition': 'short'},
      {'words': 'exploration', 'condition': 'long'},
      {'words': 'cloud', 'condition': 'short'},
      {'words': 'collaboration', 'condition': 'long'},
      {'words': 'moon', 'condition': 'short'},
      {'words': 'melancholy', 'condition': 'long'},
      {'words': 'light', 'condition': 'short'},
      {'words': 'anticipation', 'condition': 'long'},
      {'words': 'tree', 'condition': 'short'},
      {'words': 'enlightenment', 'condition': 'long'},
      {'words': 'stone', 'condition': 'short'},
      {'words': 'imagination', 'condition': 'long'}]
    Routine Fixation
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    conditions:
      [{'words': 'rain', 'condition': 'short'},
      {'words': 'perseverance', 'condition': 'long'},
      {'words': 'flame', 'condition': 'short'},
      {'words': 'responsibility', 'condition': 'long'},
      {'words': 'smile', 'condition': 'short'},
      {'words': 'transformation', 'condition': 'long'},
      {'words': 'book', 'condition': 'short'},
      {'words': 'constellation', 'condition': 'long'},
      {'words': 'sun', 'condition': 'short'},
      {'words': 'exploration', 'condition': 'long'},
      {'words': 'cloud', 'condition': 'short'},
      {'words': 'collaboration', 'condition': 'long'},
      {'words': 'moon', 'condition': 'short'},
      {'words': 'melancholy', 'condition': 'long'},
      {'words': 'light', 'condition': 'short'},
      {'words': 'anticipation', 'condition': 'long'},
      {'words': 'tree', 'condition': 'short'},
      {'words': 'enlightenment', 'condition': 'long'},
      {'words': 'stone', 'condition': 'short'},
      {'words': 'imagination', 'condition': 'long'}]
    Routine Recall
  LoopTerminator trials_2
  Routine EndScreen
